global:
  startup_modules: []
  remote_modules_server:
    address: localhost
    port: 12345
    certfile: null
    keyfile: null
  namespace_server_port: 18861
  force_remote_calls_by_value: true
  stylesheet: qdark.qss
  daily_data_dirs: true
  hide_manager_window: false
  default_data_dir: null
  extension_paths: []

gui:
    camera_gui:
        module.Class: 'camera.cameragui.CameraGui'
        connect:
            camera_logic: camera_logic

logic:
    camera_logic:
        module.Class: 'camera_logic.CameraLogic'
        connect:
            camera: 'thor_camera'

hardware:

  thor_camera:
    module.Class: camera.thorlabs.thorlabs_DCx.CameraThorlabs
    allow_remote: false
    connect: {}
    options: {}

  kinesis_motor:
    module.Class: motor.kinesis_motor.KinesisStage
    allow_remote: false
    connect: {}
    options:
        dll_path:"C:\\Program Files\\Thorlabs\\Kinesis\\Thorlabs.MotionControl.KCube.StepperMotor.dll"
        axis_labels:
            - x
            - y
            - z
        x:
            hw_type: 'KDC101'
            serial_num: 27262884
            pitch: 1
            unit: 'm'
            constraints:
                pos_min: 0
                pos_max: .025
                vel_min: .001
                vel_max: .015
                acc_min: .004
                acc_max: .01
        y:
            hw_type: 'KDC101'
            serial_num: 27256199
            pitch: 1
            unit: 'm'
            constraints:
                pos_min: 0
                pos_max: .025
                vel_min: .001
                vel_max: .015
                acc_min: .004
                acc_max: .01
        z:
            hw_type: 'KDC101'
            serial_num: 27256522
            pitch: 1
            unit: 'm'
            constraints:
                pos_min: 0
                pos_max: .025
                vel_min: .001
                vel_max: .015
                acc_min: .004
                acc_max: .01